PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 0
  Use version = 2024.2.*
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine iti
    RoutineSettingsComponent iti
      stopVal [duration (s)] = 1.5
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      desc:
        fixation cross
    TextComponent iti_fix
      startVal [time (s)] = 0
      text = +
      letterHeight = 0.05
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  Routine prep
    RoutineSettingsComponent prep
      stopVal [duration (s)] = 1.5
      desc = trial type cue
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    TextComponent prep_fix
      startVal [time (s)] = 0
      color [set every repeat] = $block_color
      text = +
      letterHeight = 0.05
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  Routine dot
    RoutineSettingsComponent dot
      stopVal [duration (s)] = 1.5
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      desc:
        saccade cue
    PolygonComponent circle
      startVal [time (s)] = 0
      fillColor = yellow
      lineColor = yellow
      size = .1,.1
      pos = -.9,0
      shape = circle
      lineWidth = 0
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  Routine block_start
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    TextComponent block_prep
      startVal [time (s)] = 0
      color [set every repeat] = $block_color
      letterHeight = 0.05
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      text [set every repeat]:
        $f"""next block: {block_name}
        {blocks.thisN}
        """
  Routine block_break
    RoutineSettingsComponent block_break
      stopVal [duration (s)] = 45
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    CodeComponent skip_code
      Code Type = Py
      Begin Routine:
        if blocks.thisRepN == 3:
            continueRoutine = False
    TextComponent block_fix
      startVal [time (s)] = 0
      color = gray
      text = +
      letterHeight = 0.05
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  Routine waitforscanner
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    TextComponent text
      startVal [time (s)] = 0
      text = waiting for scanner (=)
      letterHeight = 0.05
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    KeyboardComponent scanner_trigger
      startVal [time (s)] = 0
      forceEndRoutine = True
      registerOn = release
      allowedKeys = 'equal'
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  Routine instructions
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    TextComponent instructions_text1
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Welcome to the Saccade Task!

        Focus on colored crosses until a dot appears.
        The cross color will tell you what to do.

          green => look at the dot
          blue => look opposite the dot
          red => look opposite.

        Red means you score points if you look away.

        Continue to look at the correct position until the cross returns

        A gray cross is a break
    KeyboardComponent instruct_key1
      startVal [time (s)] = 0
      forceEndRoutine = True
      registerOn = release
      allowedKeys = 'y','n','left','right','space','return','equal','up','down','any'
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Flow
  Routine instructions
  Routine waitforscanner
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    isTrials = False
    conditionsFile = Downloads/anti_block.xlsx
    nReps = 1
    conditions = []
    endPoints = [0,1]
    Routine block_start
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      conditionsFile = Downloads/anti_block-iti.xlsx
      nReps = 1
      conditions = []
      endPoints = [0,1]
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      Routine iti
      Routine prep
      Routine dot
    LoopTerminator trials
    Routine block_break
  LoopTerminator blocks
